WorkflowBuilder(Version=2.7.1)
GroupWorkflow Camera
    ExternalizedMapping(DeviceId(DisplayName=LowResCam), ConfigFile(DisplayName=LowResConfig))
    -> Bonsai.uEye.uEyeCapture(DeviceId=1, ConfigFile=C:\Users\Utilizador\Desktop\ueyeParameters700x700.ini)
    -> MemberSelector(Selector=Image)
    -> PublishSubject LowResCamera

GroupWorkflow "Transformation Matrixes"
    ExternalizedMapping(FileName(DisplayName=PX2MM))
    -> Bonsai.IO.CsvReader(FileName=..\resources\VRData\VRConversions\PX2MM.txt, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=0)
    -> SelectMany ForEachLine
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #0 -> MemberSelector(Selector=Item3) => #3
        #1, #2, #3 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> Take(Count=1)
    -> AsyncSubject PX2MM

GroupWorkflow MagnetControl
    Bonsai.IO.CreateSerialPort
      Name=MagnetCOM
      PortName=COM3
      BaudRate=115200
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=false
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=MagnetCOM, NewLine=\n)

StringProperty(Value="G21 G92 X0 Y0")
-> Bonsai.IO.SerialStringWrite(PortName=MagnetCOM, NewLine=\n)
-> StringProperty(Value=SetMagnetHome)
-> CreateObservable GenerateProtocolSequence
    DateTimeProperty(Value=0001-01-01T00:00:00)
    -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
    ExternalizedMapping(Value(DisplayName=Speed3)) => #2
    ExternalizedMapping(Value(DisplayName=Speed2)) => #3
    ExternalizedMapping(Value(DisplayName=Speed1)) => #4
    ExternalizedMapping(Value(DisplayName=TrialCount))
    -> IntProperty(Value=1) => #6
    -> PropertyMapping(Count) => #7
    #6 -> Add(Operand=IntProperty(Value=-1)) => #8
    -> PropertyMapping(Upper) => #9
    #1, #8 -> Zip
    -> MemberSelector(Selector=Item1) => #11
    #11, #9 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0) => #12
    #12, #7 -> Bonsai.Numerics.Distributions.SampleDistinct(Count=1) => #13
    -> Condition => #14
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #14, #4 -> FloatProperty(Value=20) => #15
    #13 -> Condition => #16
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    #16, #3 -> FloatProperty(Value=40) => #17
    #13 -> Condition => #18
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    #18, #2 -> FloatProperty(Value=30) => #19
    #15, #17, #19 -> Merge
    -> WorkflowOutput
-> Concat
-> Take(Count=1)
-> CreateObservable Trial
    WorkflowInput Source1
    -> PropertyMapping("Speed (mm/s)") => #1
    ExternalizedMapping => #2
      "TurnRadius (mm)"
      "StraightLength (mm)"
      "Direction (1 or -1)"
      RootPath
      Date
      ProtocolName
      RedLED
      GreenLED
      RedOnFrames
      RedOffFrames
      GreenOnFrames
      GreenOffFrames
      Framerate
      LEDOption
      "Duration (sec)"
    #1, #2 -> GroupWorkflow TrialParameters
        ExternalizedMapping(Value(DisplayName="Speed (mm/s)"))
        -> FloatProperty(Value=20) => #1
        ExternalizedMapping(Value(DisplayName="TurnRadius (mm)"))
        -> FloatProperty(Value=12.5) => #3
        ExternalizedMapping(Value(DisplayName="StraightLength (mm)"))
        -> FloatProperty(Value=25) => #5
        ExternalizedMapping(Value(DisplayName="Direction (1 or -1)"))
        -> FloatProperty(Value=1) => #7
        ExternalizedMapping(Value(DisplayName=RedLED))
        -> BooleanProperty(Value=true) => #9
        ExternalizedMapping(Value(DisplayName=GreenLED))
        -> BooleanProperty(Value=true) => #11
        ExternalizedMapping(Value(DisplayName=RedOnFrames))
        -> IntProperty(Value=3) => #13
        ExternalizedMapping(Value(DisplayName=RedOffFrames))
        -> IntProperty(Value=6) => #15
        ExternalizedMapping(Value(DisplayName=GreenOnFrames))
        -> IntProperty(Value=1) => #17
        ExternalizedMapping(Value(DisplayName=GreenOffFrames))
        -> IntProperty(Value=8) => #19
        #9, #13, #15, #11, #17, #19 -> Zip => #20
        ExternalizedMapping(Value(DisplayName=Framerate))
        -> IntProperty(Value=85) => #22
        ExternalizedMapping(Value(DisplayName=LEDOption))
        -> IntProperty(Value=1) => #24
        ExternalizedMapping(Value(DisplayName="Duration (sec)"))
        -> IntProperty(Value=30) => #26
        #1, #3, #5, #7, #22, #24, #26 -> Zip => #27
        #27, #20 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1.Item1 as Speed,
            it.Item1.Item2 as TurnRadius,
            it.Item1.Item3 as StraightLength,
            it.Item1.Item4 as Direction,
            it.Item1.Item5 as Framerate,
            it.Item1.Item6 as LEDOption,
            it.Item1.Item7 as TrialDuration,
            it.Item2.Item1 as RedLEDSwitch,
            it.Item2.Item2 as RedOnFrames,
            it.Item2.Item3 as RedOffFrames,
            it.Item2.Item4 as GreenLEDSwitch,
            it.Item2.Item5 as GreenOnFrames,
            it.Item2.Item6 as GreenOffFrames)
        -> BehaviorSubject Params

        ExternalizedMapping(RootPath, Date, ProtocolName)
        -> GroupWorkflow LogPaths
            ExternalizedMapping(Value(DisplayName=RootPath))
            -> StringProperty(Value=C:\Users\Utilizador\Desktop) => #1
            StringProperty(Value=\) => #2
            #1, #2 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> Take(Count=1)
            -> AsyncSubject RootPath

            ExternalizedMapping(Value(DisplayName=Date))
            -> StringProperty(Value=20240404) => #8
            SubscribeSubject RootPath => #9
            StringProperty(Value=\) => #10
            ExternalizedMapping(Value(DisplayName=ProtocolName))
            -> StringProperty(Value=ParallelGreen) => #12
            SubscribeSubject Params
            -> MemberSelector(Selector=Speed)
            -> Format(Format={0}mms, Selector=it) => #15
            #9, #8, #10, #12, #15 -> Zip
            -> Format(Format={0}{1}{2}{3}{4}, Selector="Item1,Item2,Item3,Item4,Item5")
            -> Take(Count=1)
            -> AsyncSubject SessionPath

    GroupWorkflow Tracking
        SubscribeSubject LowResCamera
        -> Timestamp => #1
        -> MemberSelector(Selector=Value) => #2
        -> IntProperty(Value=1)
        -> Accumulate => #4
        #2, #4 -> Zip => #5
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Vision.Grayscale => #7
        -> Bonsai.Vision.CropCenter(Size(Width=320, Height=320), FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #8
        -> Bonsai.Vision.AdaptiveThreshold(MaxValue=255, AdaptiveMethod=GaussianC, ThresholdType=BinaryInv, BlockSize=21, Parameter=8)
        -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=10, MaxArea=65)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid) => #13
        -> MemberSelector(Selector=X) => #14
        #13 -> MemberSelector(Selector=Y) => #15
        #8 -> MemberSelector(Selector=Size.Width)
        -> Divide(Operand=IntProperty(Value=2))
        -> PropertyMapping(Value) => #18
        #7 -> Bonsai.Vision.Threshold(ThresholdValue=15, MaxValue=255, ThresholdType=BinaryInv)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=500)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #22
        -> MemberSelector(Selector=Centroid) => #23
        -> Disable GroupWorkflow ConvertToMm => #24
            SubscribeSubject PX2MM => #0
            WorkflowInput Source1 => #1
            -> MemberSelector(Selector=X) => #2
            #1 -> MemberSelector(Selector=Y) => #3
            #2, #3 -> Zip => #4
            #4, #0 -> WithLatestFrom
            -> UnitTransform
            -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import Point2f

                @returns(Point2f)
                def process(value):
                  return Point2f(value.Item1,value.Item2)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Fly)
        -> MemberSelector(Selector=Fly) => #26
        #22 -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #27
        -> MemberSelector(Selector=Item1) => #28
        #27 -> MemberSelector(Selector=Item2) => #29
        #23, #28, #29 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform FindHead => #31
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            # Global Variables
            centroid = Point2f(float(0),float(0))
            head = Point2f(float(0),float(0))
            tail = Point2f(float(0),float(0))
            history = float(0)


            def distancesquare(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return dx * dx + dy * dy

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            def cossimilarity(pt1,pt2):
              if (dotproduct(pt1,pt1)*dotproduct(pt2,pt2)) == 0:
                return float(1)
              else:
                return float(dotproduct(pt1,pt2)/(math.sqrt(dotproduct(pt1,pt1))*math.sqrt(dotproduct(pt2,pt2))))

            def dotproduct(pt1,pt2):
              return pt1.X*pt2.X+pt1.Y*pt2.Y

            @returns(Point2f)
            def process(value):
                #Load Global Variables
                global centroid, head, tail, history

                pt1 = value.Item1
                pt2 = value.Item2
                pt3 = value.Item3
                d = distancesquare(centroid,pt1)

                if distancesquare(pt3, head) < distancesquare(pt3, tail):
                  aux = pt2
                  pt2 = pt3
                  pt3 = aux

                dCentroid = pt1 - centroid
                dHead = head - centroid
                if distancesquare(centroid,pt1) > 1:
                  cossim = cossimilarity(dCentroid,dHead)
                  history = history + 0.2*cossim
                else:
                  history = 1

                if history < 0:
                  aux = pt2
                  pt2 = pt3
                  pt3 = aux

                centroid = pt1
                head = pt2
                tail = pt3

                return head
        -> Disable GroupWorkflow ConvertToMm => #32
            SubscribeSubject PX2MM => #0
            WorkflowInput Source1 => #1
            -> MemberSelector(Selector=X) => #2
            #1 -> MemberSelector(Selector=Y) => #3
            #2, #3 -> Zip => #4
            #4, #0 -> WithLatestFrom
            -> UnitTransform
            -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import Point2f

                @returns(Point2f)
                def process(value):
                  return Point2f(value.Item1,value.Item2)
            -> WorkflowOutput
        #24, #32 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform CalculateOrientation
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            @returns(float)
            def process(value):
                centroid = value.Item1
                head = value.Item2
                orientation = angleline(centroid,head)
                return float(orientation)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Orientation)
        -> MemberSelector(Selector=Orientation) => #36
        #32 -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Head)
        -> MemberSelector(Selector=Head) => #38
        #7 -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #39
        #7 -> MemberSelector(Selector=Size.Width)
        -> Divide(Operand=IntProperty(Value=2)) => #41
        #41, #18 -> Subtract(Operand=IntProperty(Value=160)) => #42
        -> PropertyMapping(Value) => #43
        #14, #43 -> Add(Operand=FloatProperty(Value=190)) => #44
        #42 -> PropertyMapping(Value) => #45
        #15, #45 -> Add(Operand=FloatProperty(Value=190)) => #46
        #44, #46 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f => #48
          Script:
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f

            @returns(Point2f)
            def process(value):
              return Point2f(value.Item1,value.Item2)
        -> Disable GroupWorkflow ConvertToMm
            SubscribeSubject PX2MM => #0
            WorkflowInput Source1 => #1
            -> MemberSelector(Selector=X) => #2
            #1 -> MemberSelector(Selector=Y) => #3
            #2, #3 -> Zip => #4
            #4, #0 -> WithLatestFrom
            -> UnitTransform
            -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import Point2f

                @returns(Point2f)
                def process(value):
                  return Point2f(value.Item1,value.Item2)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Magnet)
        -> MemberSelector(Selector=Magnet) => #51
        #39, #23, #31, #48 -> Zip
        -> HeadVisualizer
        #7 -> Bonsai.Vision.MaskPolygon
          Regions(ArrayOfPoint(Point(X=333, Y=25), Point(X=370, Y=25), Point(X=370, Y=55), Point(X=333, Y=55)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Threshold(ThresholdValue=105, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=150, MaxArea=10000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Area)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as RedLED)
        -> MemberSelector(Selector=RedLED) => #62
        #7 -> Bonsai.Vision.MaskPolygon
          Regions(ArrayOfPoint(Point(X=483, Y=35), Point(X=522, Y=35), Point(X=522, Y=78), Point(X=483, Y=78)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Threshold(ThresholdValue=105, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=650, MaxArea=10000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Area)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as GreenLED)
        -> MemberSelector(Selector=GreenLED) => #71
        #62, #71 -> Zip => #72
        #5 -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Frame)
        -> MemberSelector(Selector=Frame) => #75
        #4 -> PropertyMapping(Value)
        -> FloatProperty(Value=1182) => #77
        SubscribeSubject Params
        -> MemberSelector(Selector=Framerate)
        -> PropertyMapping(Value) => #80
        #77, #80 -> Divide(Operand=IntProperty(Value=85))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as ElapsedTimeSec)
        -> MemberSelector(Selector=ElapsedTimeSec)
        #1 -> MemberSelector(Selector=Timestamp) => #84
        #75, #26, #38, #36, #51, #72, #84 -> Zip
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Value.Item1 as Frame,
            it.Value.Item2 as Fly,
            it.Value.Item3 as Head,
            it.Value.Item4 as Orientation,
            it.Value.Item5 as Magnet,
            it.Value.Item6.Item1 as RedLED,
            it.Value.Item6.Item2 as GreenLED,
            it.Timestamp as TimeTracking,
            it.Value.Item7 as TimeAcquisition)
        -> BehaviorSubject Fly

    GroupWorkflow Stimuli
        SubscribeSubject Fly => #0
        SubscribeSubject Params => #1
        Timer(DueTime=PT0S, Period=PT0.015S) => #2
        #2, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #4
        -> Timestamp
        -> GroupWorkflow "Elapsed Time Calculator" => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=Timestamp) => #1
            -> Take(Count=1) => #2
            #1, #2 -> WithLatestFrom
            -> Subtract
            -> MemberSelector(Selector=TotalSeconds)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToFloat
              Expression: Single(it)
            -> WorkflowOutput
        #4 -> MemberSelector(Selector=Frame) => #7
        #4 -> MemberSelector(Selector=Fly.X) => #8
        #4 -> MemberSelector(Selector=Fly.Y) => #9
        #4 -> MemberSelector(Selector=Orientation) => #10
        #6, #7, #8, #9, #10 -> Zip => #11
        #11, #1 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform Protocol
          Script:
            import math
            from System import Tuple

            # Global Variables (Outputs)
            StimX = None                #Stimulus X Coordinate in Millimeters
            StimY = None                #Stimulus Y Coordinate in Millimeters
            StimOri = None              #Stimulus Orientation in Radians
            state = None                #Stimulus State

            # State Legend
            # 99 - Initiation (Close Loop With Fly Center of Mass and Orientation)
            # 0 - Straight Section
            # -1/1 - Curved Section (signal indicates direction of the turn - left vs right)

            # Global Protocol Variables
            n = None                    #Counter for the amount straight steps the stimulus needs to do before entering a curved section(if this number is not whole it is corrected on the first step of the curved section)
            m = None                    #Counter for the amount curved steps the stimulus needs to do before entering a straight section(if this number is not whole it is corrected on the first step of the straight section)
            sign_straight = None        #Used to shift directions during the straight sections
            sign_curve = None           #Used to shift rotation direction during the curves
            switch = None               #Used to add or not pi to the angle used to determine the curved section stimulus position (1 adds pi / -1 does not add pi)
            switch_counter = None       #Used to countdown the number of curved sections before the switch changes
            yi = None                   #Sets the initial stimulus y coordinate for the curved sections. Important since the the position of the target during the curved sections is done relative to the initial position
            ti = None                   #Saves Previous Time Point to Process dt
            dt = None                   #Interval of time since last projected frame
            counter = None


            @returns(Tuple[float,float,float,float,float,bool,bool])
            def process(value):
                #Load Global Variables
                global StimX, StimY, StimOri, n, m, state, sign_straight, sign_curve, switch, switch_counter, yi, ti, dt, counter

                # Initiate LEDs
                RedLEDSwitch = value.Item2.RedLEDSwitch
                GreenLEDSwitch = value.Item2.GreenLEDSwitch
                RedLED = bool(False)
                GreenLED = bool(False)

                # Close Loop Input
                FlyX = float(0) #value.Item1.Item3      #Tracked Fly X Coordinate in Millimeters
                FlyY = float(0) #value.Item1.Item4      #Tracked Fly Y Coordinate in Millimeters
                FlyOri = float(0) #value.Item1.Item5    #Tracked Fly Orientation in Radians

                # Open Loop Input
                t = value.Item1.Item1         #Elapsed time since the start of the experiment
                frame=value.Item1.Item2       #Current Frame from current section
                option = value.Item2.LEDOption #Protocol Option for LED (see start)
                fr = value.Item2.Framerate    #framerate of the camera
                duration = value.Item2.TrialDuration #In seconds

                # Protocol Specific Inputs
                speed=value.Item2.Speed       #Stimulus speed in Millimeters/Second
                r=value.Item2.TurnRadius      #Radius of the curved section
                l=value.Item2.StraightLength  #Length of the straight section
                sign=value.Item2.Direction    #Global direction (changes the entire protocol direction to the mirror image)


                # Protocol Algorithm -------------------------------
                if ti is None:
                  ti = t
                  counter = 0
                  dt = 0
                  return Tuple.Create(float(value.Item1.Item2),float.NaN,float.NaN,float.NaN,float.NaN,RedLED,GreenLED)
                else:
                  # Time Interval
                  if counter < 10:
                    counter += 1
                  dt = 0.015 #(dt*(counter-1)/counter)+(t - ti)/counter  #makes dt a pseudo-average insted of the actual interval
                  #dt = t - ti
                  ti = t
                  # Protocol Constants
                  dd = speed*dt                 #Amount of distance traveled by the stimulus in between projection frames
                  halfl = l/2                   #Half of the length of the straight path (Used to keep the protocol centered and to know the starting X protision of the curved sections)
                  halfc = math.pi*r             #Perimeter of half a circle
                  k = halfc/dd                  #Number of steps required to travel along the half circle perimeter
                  # Protocol Logic
                  if t < 5:
                    StimX = -sign*halfl
                    StimY = 0
                    StimOri = 0
                    sign_straight = 1
                    sign_curve = 1
                    switch = -1
                    switch_counter = 0
                    state = 99
                    n = None
                  else:
                    PrevX = StimX             #Saves Previous X value for the stimulus
                    PrevY = StimY             #Saves Previous Y value for the stimulus
                    if n is None:
                      StimX = -sign*halfl
                      StimY = 0
                      n = l/dd
                      m = 0
                      state = 0
                    elif (state==0 and n>=1):
                      StimX += sign*sign_straight*dd
                      n -= 1
                    elif (n<1 and (m+1)<k):
                      if m==0:
                        m = (1-n)
                        state = sign_curve*1
                        yi = StimY
                      else:
                        m += 1
                      vangle = sign_curve*(((1-m/k)*math.pi/2) + (1+switch)*math.pi/2)
                      vlength = 2*r*math.sin((m/k)*math.pi/2)
                      StimX = sign*(sign_straight*halfl + vlength*math.sin(vangle))
                      StimY = yi + vlength*math.cos(vangle)
                    elif ((m+1)>k):
                      StimX = sign*sign_straight*(halfl - (1-(m+1-k))*dd)
                      n = l/dd - (m+1-k)
                      m = 0
                      sign_straight = -sign_straight
                      if (switch_counter==0):
                        switch = -switch
                        switch_counter = 2
                      elif (switch_counter==1):
                        sign_curve = -sign_curve
                      switch_counter -= 1
                      state = 0
                    StimOri = math.atan2(StimY-PrevY, StimX-PrevX)

                    # LED Control
                    if (RedLEDSwitch):
                      RedLED = bool(True);
                    if (GreenLEDSwitch):
                      if(option==1):
                        halfn = l/(2*dd)
                        halfk = k/2
                        time1 = fr*(duration/3)
                        time2 = fr*(duration*2/3)
                        if(state==0 and n<halfn and frame>time1 and frame<time2):
                          GreenLED = bool(True);
                        if(abs(state)==1 and m>halfk and frame>time2):
                          GreenLED = bool(True);
                  # In the output we have also value.Item1.Item5 which corresponds to the Low Resolution Frame number
                  return Tuple.Create(float(value.Item1.Item2),float(StimX),float(StimY),float(StimOri),float(state),RedLED,GreenLED)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1 as LowResFrame,
            it.Item2 as X,
            it.Item3 as Y,
            it.Item4 as Orientation,
            it.Item5 as State,
            it.Item6 as RedLED,
            it.Item7 as GreenLED)
        -> BehaviorSubject Stim

    GroupWorkflow Command
        StringProperty(Value="G21 G53 X0 Y0")
        -> Take(Count=1) => #1
        Timer(DueTime=PT2S, Period=PT0S) => #2
        SubscribeSubject Stim => #3
        -> MemberSelector(Selector=X) => #4
        #3 -> MemberSelector(Selector=Y) => #5
        #4, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform BuildMoveCommand => #7
          Expression: "G21 G53 X" + Item1.ToString() + " Y" + Item2.ToString()
        #7, #2 -> SkipUntil => #8
        #1, #8 -> Concat
        -> Bonsai.IO.SerialStringWrite(PortName=MagnetCOM, NewLine=\n) => #10
        #10, #3 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Value.LowResFrame as LowResFrame,
            it.Value.X as X,
            it.Value.Y as Y,
            it.Value.Orientation as Orientation,
            it.Value.State as State,
            it.Timestamp as TimeProjection)
        -> BehaviorSubject Command
        #3 -> MemberSelector(Selector=RedLED)
        -> PublishSubject RedLED
        #3 -> MemberSelector(Selector=GreenLED)
        -> PublishSubject GreenLED

    GroupWorkflow Logging
        GroupWorkflow LogFly
            StringProperty(Value=_Fly_.csv) => #0
            SubscribeSubject SessionPath => #1
            #1, #0 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #4
            SubscribeSubject Fly => #5
            #4, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\Utilizador\Desktop\20240404\ParallelGreen20mms_Fly_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

        GroupWorkflow LogStim
            StringProperty(Value=_Stim_.csv) => #0
            SubscribeSubject SessionPath => #1
            #1, #0 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #4
            SubscribeSubject Command => #5
            #4, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\Utilizador\Desktop\20240404\ParallelGreen20mms_Stim_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

        GroupWorkflow LogVideo
            SubscribeSubject LowResCamera => #0
            StringProperty(Value=_CamL_.avi) => #1
            SubscribeSubject SessionPath => #2
            #2, #1 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #5
            Source1=#0, Source3=#5 -> Bonsai.Vision.VideoWriter
              FileName=C:\Users\Utilizador\Desktop\20240404\ParallelGreen20mms_CamL_.avi
              Suffix=FileCount
              Buffered=true
              Overwrite=false
              FourCC=FMP4
              FrameRate=85
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=Linear

    GroupWorkflow LEDArduino
        SubscribeSubject RedLED => #0
        SubscribeSubject GreenLED => #1
        SubscribeSubject Params => #2
        -> MemberSelector(Selector=RedOnFrames)
        -> PropertyMapping(Value)
        -> IntProperty(Value=1) => #5
        #2 -> MemberSelector(Selector=RedOffFrames)
        -> PropertyMapping(Value)
        -> IntProperty(Value=0) => #8
        #5, #8 -> Zip => #9
        #0, #9 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform Protocol
          Script:
            import math
            from System import Tuple

            # Global Variables (Outputs)
            counter = None
            outOpt = None#
            option = None

            @returns(bool)
            def process(value):

                #Load Global Variables
                global counter, outOpt, option

                defOpt = value.Item1
                on = value.Item2.Item1
                off = value.Item2.Item2

                if off>0:
                  if counter is None:
                    outOpt = defOpt
                    counter = on
                    option = 1
                  else:
                    if (option == 1 and counter == 0):
                      outOpt = bool(False)
                      counter = off
                      option = 0
                    elif (option == 0 and counter == 0):
                      outOpt = defOpt
                      counter = on
                      option = 1
                  counter -= 1
                  if counter < 0:
                    counter = 0
                  return outOpt
                else:
                  return defOpt
        -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=2)
        #2 -> MemberSelector(Selector=GreenOnFrames)
        -> PropertyMapping(Value)
        -> IntProperty(Value=1) => #15
        #2 -> MemberSelector(Selector=GreenOffFrames)
        -> PropertyMapping(Value)
        -> IntProperty(Value=8) => #18
        #15, #18 -> Zip => #19
        #1, #19 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform Protocol
          Script:
            import math
            from System import Tuple

            # Global Variables (Outputs)
            counter = None
            outOpt = None#
            option = None

            @returns(bool)
            def process(value):

                #Load Global Variables
                global counter, outOpt, option

                defOpt = value.Item1
                on = value.Item2.Item1
                off = value.Item2.Item2

                if counter is None:
                  outOpt = defOpt
                  counter = on
                  option = 1
                else:
                  if (option == 1 and counter == 0):
                    outOpt = bool(False)
                    counter = off
                    option = 0
                  elif (option == 0 and counter == 0):
                    outOpt = defOpt
                    counter = on
                    option = 1
                counter -= 1
                if counter < 0:
                  counter = 0
                return outOpt
        -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=8)

    GroupWorkflow CloseTrial
        Timer(DueTime=PT0S, Period=PT1S) => #0
        SubscribeSubject Params
        -> MemberSelector(Selector=TrialDuration)
        -> PropertyMapping(Count) => #3
        #0, #3 -> Skip(Count=30)
        -> Take(Count=1)
        -> WorkflowOutput
    -> WorkflowOutput
-> Concat
-> Delay(DueTime=PT2S)
-> StringProperty(Value="G21 G53 X0 Y0")
-> Bonsai.IO.SerialStringWrite(PortName=MagnetCOM, NewLine=\n) => #13
-> StringProperty(Value=ReturnMagnetHome)
-> WorkflowOutput
#13 -> BooleanProperty(Value=false)
-> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=2)
#13 -> BooleanProperty(Value=false)
-> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=8)
