<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p3="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:CreateObservable">
        <Name>GenerateProtocolSequence</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DateTimeProperty">
                <Value>0001-01-01T00:00:00</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>2</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleDistinct">
                <p1:Count>3</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Speed3" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Speed2" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Speed1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>40</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="9" Label="Source1" />
            <Edge From="3" To="11" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="10" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="13" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="13" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>3</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Protocol</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT30S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>LowResCamera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Elapsed Time Calculator</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay.TotalSeconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="DoubleProperty">
                      <Value>52232.868505599996</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>ToFloat</scr:Name>
                    <scr:Expression>Single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(it as ElapsedTime)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ElapsedTime (s)</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>LowRes Frame</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Photodiode</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ElapsedTime (s)</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.ElapsedTime</Selector>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>PhotodiodeProtocol</ipy:Name>
                    <ipy:Script># Global Variables (Outputs)
Switch = None                #Stimulus X Coordinate in Millimeters

@returns(float)
def process(value):
    #Load Global Variables
    global Switch
    
    if Switch is None or value &lt; 1:
      Switch = 1
    elif value &gt; 1: 
      if Switch == 1:
        Switch = 0
      elif Switch == 0:
        Switch = 1
    return Switch</ipy:Script>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorA" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <LocationX>-0.9</LocationX>
                    <LocationY>0.9</LocationY>
                    <Layer>0</Layer>
                    <Diameter>0.1</Diameter>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="6" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Tracking</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowResCamera</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ElapsedTime (s)</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.ElapsedTime</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimeInterval" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Interval.TotalSeconds</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>ToFloat</scr:Name>
                    <scr:Expression>Single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowRes Frame</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Grayscale" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:BackgroundSubtraction">
                      <cv:BackgroundFrames>100</cv:BackgroundFrames>
                      <cv:AdaptationRate>0</cv:AdaptationRate>
                      <cv:ThresholdValue>40</cv:ThresholdValue>
                      <cv:ThresholdType>Binary</cv:ThresholdType>
                      <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:FindContours">
                      <cv:Mode>External</cv:Mode>
                      <cv:Method>ChainApproxNone</cv:Method>
                      <cv:Offset>
                        <cv:X>0</cv:X>
                        <cv:Y>0</cv:Y>
                      </cv:Offset>
                      <cv:MinArea>10</cv:MinArea>
                      <cv:MaxArea>100</cv:MaxArea>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:BinaryRegionAnalysis" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:LargestBinaryRegion" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Centroid.X</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>Double.IsNaN(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:BinaryRegionExtremes">
                      <cv:Method>MajorAxis</cv:Method>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>FindOrientation</ipy:Name>
                    <ipy:Script>import math
import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f
from System import Single, Tuple

# Global Variables
velocity = None
head = None
tail = None
counter = None
history = None


def distancesquare(pt1,pt2):
  dx = (pt2.X - pt1.X)
  dy = (pt2.Y - pt1.Y)
  return dx * dx + dy * dy

def angleline(pt1,pt2):
  dx = (pt2.X - pt1.X)
  dy = (pt2.Y - pt1.Y)
  return math.atan2(dy, dx)

def cossimilarity(pt1,pt2):
  if (dotproduct(pt1,pt1)*dotproduct(pt2,pt2)) == 0:
    return float(1)
  else:
    return float(dotproduct(pt1,pt2)/(math.sqrt(dotproduct(pt1,pt1))*math.sqrt(dotproduct(pt2,pt2))))

def dotproduct(pt1,pt2):
  return pt1.X*pt2.X+pt1.Y*pt2.Y

@returns(Tuple[float,Point2f])
def process(value):
    #Load Global Variables
    global velocity, head, tail, counter, history
    
    pt1 = value.Item1
    pt2 = value.Item2

    if pt1.X == Single(float.NaN):
      return Tuple.Create(float.NaN,Point2f(float.NaN,float.NaN))
    else:
      if head is None:
        head = pt1
        tail = pt2
        return Tuple.Create(float.NaN,Point2f(float.NaN,float.NaN))
      else:
        # If only one point has been seen
        if velocity is None:
          if distancesquare(pt1, head) &lt; distancesquare(pt1, tail):
            head = pt1
            tail = pt2
          else:
            head = pt2
            tail = pt1
          velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
          history = float(0)
          counter = float(0)
        # If more then one point has been seen
        else:
          bodyOri = Point2f(pt1.X-pt2.X,pt1.Y-pt2.Y)
          if cossimilarity(bodyOri,velocity) &lt; 0:
            aux = pt1
            pt1 = pt2
            pt2 = aux
          instantaneousVelocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
          distance = math.sqrt(distancesquare(pt1,head))
          if counter &lt; 20:
            counter += 1
          if distance &gt; 0:
            history = (history*(counter-1)/counter)+cossimilarity(instantaneousVelocity,velocity)/counter
            velocity = Point2f(((velocity.X*(counter-1))/counter)+(instantaneousVelocity.X/counter),((velocity.Y*(counter-1))/counter)+(instantaneousVelocity.Y/counter))
          if history &lt; 0:
            counter = float(0)
            history = float(0)
            head = pt2
            tail = pt1
            velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
          else:
            head = pt1
            tail = pt2
          #velocity = instantaneousVelocity
        # Flip Y Axis for cartesian referential normalization
        orientation = angleline(Point2f(tail.X,-tail.Y),Point2f(head.X,-head.Y))
        return Tuple.Create(orientation,head)</ipy:Script>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(
it.Item1 as Orientation,
it.Item2 as Head)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Orientation</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Head</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ConvertToMm</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>cPX2MM</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:UnitTransform" />
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Name>ConvertToPoint2f</ipy:Name>
                          <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f

@returns(Point2f)
def process(value):
  return Point2f(value.Item1,value.Item2)</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Centroid</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ConvertToMm</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>cPX2MM</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:UnitTransform" />
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Name>ConvertToPoint2f</ipy:Name>
                          <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f

@returns(Point2f)
def process(value):
  return Point2f(value.Item1,value.Item2)</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(
it.Item1.Item1 as ElapsedTime,
it.Item1.Item2 as TimeInterval,
it.Item1.Item3 as LowResFrame,
it.Item2.Item1 as Centroid,
it.Item2.Item2 as Orientation,
it.Item2.Item3 as Head)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Fly</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:HeadVisualizer" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source2" />
                  <Edge From="7" To="8" Label="Source3" />
                  <Edge From="8" To="25" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="9" To="28" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="15" To="22" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="18" To="20" Label="Source1" />
                  <Edge From="19" To="24" Label="Source3" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="20" To="28" Label="Source2" />
                  <Edge From="21" To="24" Label="Source5" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Logging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="RootPath" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>C:\Users\Miguel\Desktop</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>\</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>RootPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Date" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>20230330</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RootPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>\</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="ProtocolName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Parallel</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProtocolParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Speed</Selector>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}mms</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}{2}{3}{4}</Format>
                    <Selector>Item1,Item2,Item3,Item4,Item5</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>SessionPath</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogFly</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>_Fly_.csv</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}{1}</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Fly</Name>
                        </Expression>
                        <Expression xsi:type="io:CsvWriter">
                          <io:FileName>C:\Users\Miguel\Desktop\20230330\Parallel40mms_Fly_.csv</io:FileName>
                          <io:Append>false</io:Append>
                          <io:Overwrite>false</io:Overwrite>
                          <io:Suffix>FileCount</io:Suffix>
                          <io:IncludeHeader>true</io:IncludeHeader>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogStim</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>_Stim_.csv</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}{1}</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Stim</Name>
                        </Expression>
                        <Expression xsi:type="io:CsvWriter">
                          <io:FileName>C:\Users\Miguel\Desktop\20230330\Parallel40mms_Stim_.csv</io:FileName>
                          <io:Append>false</io:Append>
                          <io:Overwrite>false</io:Overwrite>
                          <io:Suffix>FileCount</io:Suffix>
                          <io:IncludeHeader>false</io:IncludeHeader>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogVideo</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LowResCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Size</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FrameSize" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>_Cam1_.avi</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}{1}</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:VideoWriter">
                            <cv:FileName>C:\Users\Miguel\Desktop\20230330\Parallel40mms_Cam1_.avi</cv:FileName>
                            <cv:Suffix>FileCount</cv:Suffix>
                            <cv:Buffered>true</cv:Buffered>
                            <cv:Overwrite>false</cv:Overwrite>
                            <cv:FourCC>FMP4</cv:FourCC>
                            <cv:FrameRate>60</cv:FrameRate>
                            <cv:FrameSize>
                              <cv:Width>416</cv:Width>
                              <cv:Height>416</cv:Height>
                            </cv:FrameSize>
                            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>SessionPath</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Format">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="PropertyMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>HighResCamera</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="PropertyMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="8" Label="Source1" />
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="8" Label="Source2" />
                        <Edge From="3" To="5" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source3" />
                        <Edge From="9" To="11" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="17" Label="Source3" />
                        <Edge From="14" To="17" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="16" Label="Source2" />
                  <Edge From="9" To="16" Label="Source1" />
                  <Edge From="10" To="16" Label="Source3" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="16" Label="Source4" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source5" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Speed (mm/s)" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Stimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Fly</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Speed (mm/s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>40</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="TurnRadius (mm)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>25</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="StraightLength (mm)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>50</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ElapsedTime (s)</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.Item1</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Direction (1 or -1)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Diameter" />
                    <Property Name="TextureName" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ProjectionObject</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Stim</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>ConvertToProjectionUnits</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>MM2pPX</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>X</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Name>ToFloat</scr:Name>
                                <scr:Expression>Single(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Y</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Name>ToFloat</scr:Name>
                                <scr:Expression>Single(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:UnitTransform" />
                              </Expression>
                              <Expression xsi:type="ipy:PythonTransform">
                                <ipy:Name>ConvertToPoint2f</ipy:Name>
                                <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f

@returns(Point2f)
def process(value):
  return Point2f(value.Item1,value.Item2)</ipy:Script>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="7" Label="Source2" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="1" To="4" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="6" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationX" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationX" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationY" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationY" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Orientation</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Angle" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Diameter" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                          <LocationX>-0.480641276</LocationX>
                          <LocationY>-0.153656736</LocationY>
                          <Layer>0</Layer>
                          <Diameter>0.1</Diameter>
                          <ColorR>0</ColorR>
                          <ColorG>0</ColorG>
                          <ColorB>0</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="12" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="9" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="2" To="6" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="12" Label="Source2" />
                        <Edge From="5" To="14" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="12" Label="Source3" />
                        <Edge From="8" To="14" Label="Source3" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="14" Label="Source4" />
                        <Edge From="11" To="12" Label="Source4" />
                        <Edge From="12" To="14" Label="Source1" />
                        <Edge From="13" To="14" Label="Source5" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Centroid.X</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Centroid.Y</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Orientation</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.Item2.ElapsedTime</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimeInterval" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Interval.TotalSeconds</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>ToFloat</scr:Name>
                    <scr:Expression>Single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowRes Frame</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>Protocol</ipy:Name>
                    <ipy:Script>import math
from System import Tuple

# Global Variables (Outputs)
StimX = None                #Stimulus X Coordinate in Millimeters
StimY = None                #Stimulus Y Coordinate in Millimeters
StimOri = None              #Stimulus Orientation in Radians
state = None                #Stimulus State

# State Legend
# 99 - Initiation (Close Loop With Fly Center of Mass and Orientation)
# 0 - Straight Section
# -1/1 - Curved Section (signal indicates direction of the turn - left vs right)

# Global Protocol Variables
n = None                    #Counter for the amount straight steps the stimulus needs to do before entering a curved section(if this number is not whole it is corrected on the first step of the curved section)
m = None                    #Counter for the amount curved steps the stimulus needs to do before entering a straight section(if this number is not whole it is corrected on the first step of the straight section)
sign_straight = None        #Used to shift directions during the straight sections
sign_curve = None           #Used to shift rotation direction during the curves
switch = None               #Used to add or not pi to the angle used to determine the curved section stimulus position (1 adds pi / -1 does not add pi)
switch_counter = None       #Used to countdown the number of curved sections before the switch changes
yi = None                   #Sets the initial stimulus y coordinate for the curved sections. Important since the the position of the target during the curved sections is done relative to the initial position



@returns(Tuple[float,float,float,float,float,float,float])
def process(value):
    #Load Global Variables
    global StimX, StimY, StimOri, n, m, state, sign_straight, sign_curve, switch, switch_counter, yi
    
    # Close Loop Input
    FlyX = value.Item1.Item4      #Tracked Fly X Coordinate in Millimeters
    FlyY = value.Item1.Item5      #Tracked Fly Y Coordinate in Millimeters
    FlyOri = value.Item1.Item6    #Tracked Fly Orientation in Radians
    
    # Open Loop Input
    t = value.Item1.Item1         #Elapsed time since the start of the experiment
    dt = value.Item1.Item2        #Interval of time since last projected frame
      
    # Protocol Specific Inputs
    speed=value.Item2.Item1       #Stimulus speed in Millimeters/Second
    r=value.Item2.Item2           #Radius of the curved section
    l=value.Item2.Item3           #Length of the straight section
    sign=value.Item2.Item4        #Global direction (changes the entire protocol direction to the mirror image)
    
    # Protocol Constants
    dd = speed*dt                 #Amount of distance traveled by the stimulus in between projection frames
    halfl = l/2                   #Half of the length of the straight path (Used to keep the protocol centered and to know the starting X protision of the curved sections)     
    halfc = math.pi*r             #Perimeter of half a circle
    k = halfc/dd                  #Number of steps required to travel along the half circle perimeter

    # Protocol Algorithm -------------------------------   
    StimOri = FlyOri  
    if t &lt; 5:
      StimX = FlyX
      StimY = FlyY
      sign_straight = 1
      sign_curve = 1
      switch = -1
      switch_counter = 0
      state = 99
      n = None
    else:
      if n is None:
        StimX = -sign*halfl
        StimY = 0
        n = l/dd
        m = 0
        state = 0
      elif (state==0 and n&gt;=1): 
        StimX += sign*sign_straight*dd
        n -= 1
      elif (n&lt;1 and (m+1)&lt;k):
        if m==0:
          m = (1-n)
          state = sign_curve*1
          yi = StimY
        else:
          m += 1
        vangle = sign_curve*(((1-m/k)*math.pi/2) + (1+switch)*math.pi/2)
        vlength = 2*r*math.sin((m/k)*math.pi/2) 
        StimX = sign*(sign_straight*halfl + vlength*math.sin(vangle))
        StimY = yi + vlength*math.cos(vangle)
      elif ((m+1)&gt;k):
        StimX = sign*sign_straight*(halfl - (1-(m+1-k))*dd)
        n = l/dd - (m+1-k)
        m = 0
        sign_straight = -sign_straight
        if (switch_counter==0):
          switch = -switch
          switch_counter = 2
        elif (switch_counter==1):
          sign_curve = -sign_curve
        switch_counter -= 1
        state = 0

    # In the output we have also value.Item1.Item5 which corresponds to the Low Resolution Frame number
    return Tuple.Create(float(t),float(dt),float(value.Item1.Item3),float(StimX/100),float(StimY/100),float(StimOri),float(state))</ipy:Script>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="ipy:PythonTransform">
                      <ipy:Name>Protocol</ipy:Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(
it.Item1 as ElapsedTime,
it.Item2 as TimeInterval,
it.Item3 as LowResFrame,
it.Item4 as X,
it.Item5 as Y,
it.Item6 as Orientation,
it.Item7 as State)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Stim</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(
it.Item1 as Speed,
it.Item2 as TurnRadius,
it.Item3 as StraightLength,
it.Item4 as Direction)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ProtocolParams</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="1" To="10" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="14" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="14" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="14" Label="Source3" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="18" Label="Source1" />
                  <Edge From="10" To="19" Label="Source1" />
                  <Edge From="10" To="20" Label="Source1" />
                  <Edge From="10" To="21" Label="Source1" />
                  <Edge From="10" To="22" Label="Source1" />
                  <Edge From="11" To="16" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source4" />
                  <Edge From="14" To="27" Label="Source2" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="18" To="26" Label="Source4" />
                  <Edge From="19" To="26" Label="Source5" />
                  <Edge From="20" To="26" Label="Source6" />
                  <Edge From="21" To="26" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="26" Label="Source2" />
                  <Edge From="25" To="26" Label="Source3" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="27" To="32" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName>..\resources\VRData\Cam1_2.avi</cv:FileName>
                <cv:PlaybackRate>85</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LowResCamera</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DeviceId" DisplayName="LowResCam" />
              <Property Name="ConfigFile" DisplayName="LowResConfig" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>LowResCamera</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DeviceId" DisplayName="HighResCam" />
              <Property Name="ConfigFile" DisplayName="HighResConfig" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>HighResCamera</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>LowResCamera</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Elapsed Time Calculator</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>ElapsedTime (s)</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Accumulate" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>LowRes Frame</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1280</gl:Width>
                <gl:Height>800</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>house</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\resources\house.jpg</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-1</Left>
              <Right>1</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Transformation Matrixes</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="cPX2MM" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>..\resources\VRData\VRConversions\PXc2MMc.txt</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%f,%f,%f</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ForEachLine</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>cPX2MM</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="MM2VL" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>..\resources\VRData\VRConversions\MMc2VLc.txt</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%f,%f,%f</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ForEachLine</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>MM2VL</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="MM2pPX" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>..\resources\VRData\VRConversions\MMl2VRl.txt</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%f,%f,%f</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ForEachLine</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>MM2pPX</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>