<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:pal="clr-namespace:Bonsai.PulsePal;assembly=Bonsai.PulsePal"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>positionX</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>positionY</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Right</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Left</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>positionY</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>-10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>positionY</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pal:SetFixedVoltage">
          <pal:PortName>COM6</pal:PortName>
          <pal:Channels>1</pal:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Up</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Down</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>positionX</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>-10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>positionX</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pal:SetFixedVoltage">
          <pal:PortName>COM6</pal:PortName>
          <pal:Channels>2</pal:Channels>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="8" To="12" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="15" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="23" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="26" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="22" To="26" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="29" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>